PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Completed URL = $"https://mcmaster.sona-systems.com/webstudy_credit.aspx?experiment_id=2299&credit_token=a7ed5bb232604f2d953e631a5dbcb151&survey_code=" + expInfo['participant']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'RA ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = staircase_loudness_summer
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Intro
    RoutineSettingsComponent Intro
      skipIf = skip
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    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        In this task, you will hear two sounds, one after the other.

        You must identify which of the two sounds is louder.

        Press '1' for the first sound, or '2' for the second sound.

        Press SPACEBAR to continue...
    KeyboardComponent continuekey
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trials
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    CodeComponent trial_setup
      Code Type = JS
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      Begin JS Routine:
        // Pre-trial organisation
        current_direction = 0;
        if ((order_mode == 2 || order_mode == 6) && trial_indexer == trial_index_array.length) { // In fully random staircase order, the order is shuffled at every reset.
            fisher_yate(trial_index_array);
            fisher_yate(trial_index_array);
            }
        if ((order_mode < 3 || order_mode == 6) && trial_indexer < trial_index_array.length) { // In non-blocked orders, this increases the staircase index at the beginning of each trial
            trial_indexer += 1;
            trial_index = trial_index_array[trial_indexer - 1];
            } else if (order_mode < 4 || order_mode == 6) { // When the highest staircase index is reached, it is reset back to the beginning
                trial_indexer = 1;
                trial_index = trial_index_array[trial_indexer - 1];
                }

        if (env_types[env_array[trial_index]][1] == "perc") {
            min_level = (min_num - perc_array[trial_index]);
            max_level = (max_num - perc_array[trial_index]);
            } else {
                min_level = (min_num - flat_array[trial_index]);
                max_level = (max_num - flat_array[trial_index]);
                }

        trial_counter_array[trial_index] += 1; // Add to total trial count for each staircase

        randint = Math.floor(Math.random() * (rand_max - rand_min)) + rand_min;

        // Decide first and second value when envelope is identical
        //if (env_types[env_array[trial_index]][0] == env_types[env_array[trial_index]][1]) {
            if (env_types[env_array[trial_index]][0] == "perc") {
                first = perc_array[trial_index] + randint;
                second = perc_array[trial_index] + level_array[trial_index] + randint;
                } else {
                    first = flat_array[trial_index] + randint;
                    second = flat_array[trial_index] + level_array[trial_index] + randint;
                    }
        //        }

        // Decide first and second value when envelope is different (adjust percussive tone)
        //if (env_types[env_array[trial_index]][0] != env_types[env_array[trial_index]][1]) {
        //    if (env_types[env_array[trial_index]][0] == "perc") {
        //        first = perc_array[trial_index] + randint;
        //        second = flat_array[trial_index] + level_array[trial_index] + randint;
        //        } else {
        //            first = flat_array[trial_index] + randint;
        //            second = perc_array[trial_index] + level_array[trial_index] + randint;
        //            }
        //        }

        adjust = 0;
        if ((second < min_num)) { // Insurance if second number exceeds boundaries
            adjust = second - min_num;
            first = first - adjust;
            second = second - adjust;
            //first = min_num + Math.abs(level_array[trial_index]);
            //second = first + level_array[trial_index];
            //level_array[trial_index] = min_level;
            } else if ((second > max_num)) {
                adjust = second - max_num;
                first = first - adjust;
                second = second - adjust;
                //first = max_num - Math.abs(level_array[trial_index]);
                //second = first + level_array[trial_index];
                //level_array[trial_index] = max_level;
                }

        // Create pathway to sound file.
        s1_file = String(ext + "/" + env_types[env_array[trial_index]][0] + "_" + first + "." + ext); // First sound file
        s2_file = String(ext + "/" + env_types[env_array[trial_index]][1] + "_" + second + "." + ext); // Second sound file

        if ((rand_stim == 0)) {
            s1 = s1_file;
            s2 = s2_file;
            }

        // If rand_stim is enabled, jumble the order of the standard and comparitor sound
        if ((rand_stim == 1)) {
            let coin = Math.floor(Math.random() * 2) + 1; // Flip a coin
            if ((coin == 1)) { // Standard then comparitor
                s1 = s1_file;
                s2 = s2_file;
                stim_order = "SC";
                } else { // Comparitor then standard
                    s1 = s2_file;
                    s2 = s1_file;
                    stim_order = "CS";
                    }
                }

        //resources = String('psychoJS.serverManager.prepareResources(["' + s1 + '", "' + s2 + '"])');
        //eval(resources);
        //var mySound;
        //var now;
        //mySound = new sound.Sound({"win": psychoJS.window, "value": 660, "volume": 1, "dur": 0.25});
        //now = TrialsClock;
      Each JS Frame:
        //console.log(TrialsClock.getTime());

        //if ((TrialsClock.getTime > 1.5 && TrialsClock.getTime < 1.6 && mySound.isPlaying == false)) {
        //    mySound.play();
        //    }
      End JS Routine:
        if (correctanswer == 0) { // Which kind of response is being used?
            var resp = (key_resp.keys - 1);
        //    var resp = 1;
            } else {
                var resp = key_resp.corr;
                }

        if ((stim_order == "CS" && resp == 0)) { // When stimulus order is reversed, response needs to be reversed as well
            resp = 1;
            } else if ((stim_order == "CS")) {
                resp = 0;
                }

        psychoJS.experiment.addData("level", level_array[trial_index]); // Add intensity value to dataset before it is changed.

        // When the response given is longer, add to the decrease counter
        if (((resp == 0) && (level_array[trial_index] >= min_level))) {
            down_counter_array[trial_index] += 1;
            up_counter_array[trial_index] = 0;
        }
        // When the response given is shorter, add to the increase counter
        if (((resp == 1) && (level_array[trial_index] <= max_level))) {
            up_counter_array[trial_index] += 1;
            down_counter_array[trial_index] = 0;
        }
        // Once the decrease counter is maxed, decrease the difference
        if ((down_counter_array[trial_index] == freq_down_array[trial_index])) {
            level_array[trial_index] -= step_size_down[step_index_array[trial_index]];
            current_direction = -1;
            if ((level_array[trial_index] < min_level)) { // Value is set to minimum if it would dip below.
                level_array[trial_index] = min_level;
                }
            down_counter_array[trial_index] = 0; // Trials must be consecutive, so counter is reset
        }
        // Once the increase counter is maxed, increase the difference
        if ((up_counter_array[trial_index] == freq_up_array[trial_index])) {
            level_array[trial_index] += step_size_up[step_index_array[trial_index]];
            current_direction = 1;
            if ((level_array[trial_index] > max_level)) { // Value is set to maximum if it would dip above.
                level_array[trial_index] = max_level;
                }
            up_counter_array[trial_index] = 0; // Trials must be consecutive, so counter is reset
        }

        // Detects reversals
        if ((first_rev_array[trial_index] == 1 && current_direction != 0 && current_direction != last_direction_array[trial_index])) { // Up response on last trial/down response on current trial or vice versa
                l_reversal_array[trial_index] = 1; // This trial is a reversal
                n_reversal_array[trial_index] += 1; // Add to total reversal counter
                c_reversal_array[trial_index] += 1; // Add to consecutive reversal counter
                freq_index_array[trial_index] += 1; // Increase step frequency index
                last_direction_array[trial_index] = current_direction;
                if ((step_index_array[trial_index] >= step_size_down.length - 1)) { // Consecutive reversal stop counter
                    c_stop_array[trial_index] += 1;
                    }
                } else if ((first_rev_array[trial_index] == 1 && current_direction != 0 && current_direction == last_direction_array[trial_index])) {
                    l_reversal_array[trial_index] = 0; // This trial is NOT a reversal
                    c_reversal_array[trial_index] = 0; // Consecutive reversal counter reset
                    c_stop_array[trial_index] = 0; // Same as above
                    last_direction_array[trial_index] = current_direction;
                    } else {
                        l_reversal_array[trial_index] = 0; // This trial is NOT a reversal
                        }

        if ((first_rev_array[trial_index] == 0 && current_direction != 0)) {
            first_rev_array[trial_index] = 1;
            last_direction_array[trial_index] = current_direction;
            }

        // Prevent frequency index from exceeding array length
        if ((freq_index_array[trial_index] > freq_step_down.length - 1)) {
            freq_index_array[trial_index] = freq_step_down.length - 1;
            }

        // Changes which step size within the step list is being used based on reversals
        if (((n_reversal_array[trial_index] <= step_size_down.length - 1) && (l_reversal_array[trial_index] == 1))) { // Number of reversals is less than step list size, and current trial is a reversal.
            step_index_array[trial_index] += 1; // Move to next value in step list
            } else if (((n_reversal_array[trial_index] > step_size_down.length) && (l_reversal_array[trial_index] == 1))) { // If reversals have exceeded the step list size
                step_index_array[trial_index] = (step_size_down.length - 1); // Cap step_index at the length of step list
                }

        // Add variables to dataset
        //psychoJS.experiment.addData("Participant", subject);
        psychoJS.experiment.addData("session", session);
        psychoJS.experiment.addData("trial_index", (trial_index + 1));
        psychoJS.experiment.addData("trial_indexer", trial_indexer);
        psychoJS.experiment.addData("trial_num", trial_counter_array[trial_index]);
        psychoJS.experiment.addData("first", first);
        psychoJS.experiment.addData("second", second);
        psychoJS.experiment.addData("random", randint);
        psychoJS.experiment.addData("adjust", adjust);
        psychoJS.experiment.addData("envelope_1", env_types[env_array[trial_index]][0]);
        psychoJS.experiment.addData("envelope_2", env_types[env_array[trial_index]][1]);
        psychoJS.experiment.addData("sound1", s1);
        psychoJS.experiment.addData("sound2", s2);
        psychoJS.experiment.addData("n_reversal", n_reversal_array[trial_index]);
        psychoJS.experiment.addData("c_reversal", c_reversal_array[trial_index]);
        psychoJS.experiment.addData("c_stop", c_stop_array[trial_index]);
        psychoJS.experiment.addData("l_reversal", l_reversal_array[trial_index]);
        psychoJS.experiment.addData("t_step_size_up", step_size_up[step_index_array[trial_index]]);
        psychoJS.experiment.addData("t_step_size_down", step_size_down[step_index_array[trial_index]]);
        psychoJS.experiment.addData("stim_order", stim_order);
        psychoJS.experiment.addData("resp", resp);
        psychoJS.experiment.addData("block", block_index + 1);

        // Stop parameters

        // When either total reversals or consecutive reversals are reached in a specific staircase, remove it from trials
        if (((stop_mode == 1 && n_reversal_array[trial_index] == stop_num) || (stop_mode == 2 && c_stop_array[trial_index] == stop_num))) { // Terminate particular trial if total reversal cap is reached
            let index = trial_index_array.indexOf(trial_index);
            if (index > -1) {
                trial_index_array.splice(index, 1);
                }
            if (order_mode > 2 && order_mode < 6) { // In blocked trials, the staircase index is only increased when the prior staircase is terminated
                trial_indexer += 1;
                trial_index = trial_index_array[trial_indexer -1];
                }
            }

        if ((trial_counter_array[trial_index] == max_trials)) { // Terminate staircase if max trials are reached
            let index = trial_index_array.indexOf(trial_index);
            if (index > -1) {
                trial_index_array.splice(index, 1);
                }
            }

        // When all staircases have been removed, the whole routine is terminated. (unless using interleaved blocks)
        if ((trial_index_array.length == 0 && order_mode != 6)) {
            trials.finished = 1;
            }

        // Different procedure for interleaved blocks - must exhaust all blocks first before experiment is terminated
        if (trial_index_array.length == 0 && order_mode == 6 && block_index < (block_array.length - 1)) {
            block_index += 1;
            trial_indexer = 0;
            trial_index_array = block_array[block_index];
            break_time = true;
            } else if (order_mode == 6 && trial_index_array.length == 0 && block_index == (block_array.length - 1)) {
                trials.finished = 1;
                }
    ResourceManagerComponent hello
      actionType = Start and Check
      checkAll = False
      disabled = True
      forceEndRoutine = False
      resources = ['$sound2', '$sound1']
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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    TextComponent number_1
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = First sound
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = $s1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      volume [set every repeat] = 1
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    TextComponent number_2
      letterHeight = 0.05
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 1.9
      text [set every repeat] = Second sound
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    SoundComponent sound_2
      forceEndRoutine = False
      sound [set every repeat] = $s2
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 2.0
      volume [set every repeat] = 1
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 5.0
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      text [set every repeat]:
        Which of the two sounds was louder?

        Press either '1' or '2' for the first or second sound respectively.
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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  Routine loading
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    CodeComponent code
      Code Type = JS
      Begin JS Experiment:
        sounds = [];
        //Merely added in this section to ensure that all the sound files
        //are loaded into the experiment. This would normally be handled
        //during trials, but the way the experiment is coded means a csv
        //file is not used during trials.
      Begin JS Routine:
        sounds.push(sound_id)
  Routine Brief1
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    TextComponent brief_text_1
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        LETTER OF INFORMATION / CONSENT

        Studying the Perception of Pitch


        Principal Investigator: Dr. Michael Schutz

        School of the Arts
        McMaster University
        Hamilton, Ontario, Canada
        (905) 525-9140 ext. 23159
        E-mail: schutz@mcmaster.ca
        Web: www.maplelab.net


        Research Sponsor: McMaster University

        Purpose of the Study: Our auditory system must work hard to discriminate different sounds. One of the dimensions through which sounds can differ is their loudness. This study will explore this by comparing tones of different loudness.


        Procedures involved in the Research: On each trial, you will listen to a pair of tones, one after the other. You must then say whether the first or second tone was louder, by using either the ‘1’ or ‘2’ key respectively. You will also complete a questionnaire on your demographics and musical experience, and complete a brief audiometric assessment.


        We anticipate that this experiment will take approximately 50 minutes (can vary based on task engagement).

        Press SPACE to continue...
    KeyboardComponent space_to_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent key_resp_4
      allowedKeys = 's','k','i','p','space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_2
      Code Type = JS
      Begin JS Routine:
        console.log((skip));
      End JS Routine:
        console.log((key_resp_4.keys));
        skip = (key_resp_4.keys.length == skipval.length) && key_resp_4.keys.every(function(element, index) {
            return element === skipval[index];
        });
        console.log((skip));
  Routine Brief2
    RoutineSettingsComponent Brief2
      skipIf = skip
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    TextComponent brief_2
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Potential Harms, Risks or Discomforts: There are no known risks to this study beyond those naturally occurring in everyday life. The decibel level of the sounds used will be within the range of those encountered in everyday speech. You do not need to answer questions that you do not want to answer or that make you feel uncomfortable, and you can withdraw (stop taking part) at any time.

        Potential Benefits: The research will not benefit you directly. However, we hope it will be useful in gaining a better understanding of the way that we hear and use sound in everyday life. This may be informative in improving the way we listen to music and/or engage in verbal communication. Additionally, it may help inform clinical treatments designed to assist those struggling with certain aspects of auditory perception.

        Payment or Reimbursement: For your participation today, you will receive 1 course credit through Sona. If for any reason you wish to withdraw from the experiment, you may do so at any time, without consequence. You may also remove your data from the study for any reason, without any consequences. If you decide to withdraw or remove your data, you will still receive full participation credit or payment, regardless of completion.

        Confidentiality: The information gathered about you and from you in this study will be kept confidential and private. Your name and other identification will be available only to the principal investigator and members of the investigator’s research team. To this end, every participant will be assigned an ID number, and the only document linking your name with this ID number will be stored in a locked cabinet, and/or in a password protected file on a computer in a locked laboratory, Hard copies of this data will be kept on file for seven (7) years, after which they will be destroyed. Electronic copies of the data (which will not include any identifying information), may be kept indefinitely.

        Participation and Withdrawal: If you decide to be part of the study, you can decide to stop (withdraw), at any time, even after signing the consent form or part-way through the study. If you decide to withdraw, there will be no consequences. In cases of withdrawal, any data you have provided will be destroyed unless you indicate otherwise. If you do not want to answer some of the background questions, you can leave them blank and still participate in other aspects of the study.

        Press SPACE to continue...
    KeyboardComponent space_to_continue2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Brief3
    RoutineSettingsComponent Brief3
      skipIf = skip
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    TextComponent brief_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Information about the Study Results: A summary of the results will be posted on our website at www.maplelab.net/experiment-summaries. Feel free to check back periodically to see what we were able to learn as a result of your participation.

        Questions about the Study: If you have questions or require more information about the study itself, please contact the Principal Investigator. This study has been reviewed by the McMaster University Research Ethics Board. and received ethics clearance. If you have concerns or questions about your rights as a participant or about the way the study is conducted, please contact:

        McMaster Research Ethics Secretariat
        Telephone: (905) 525-9140 ext. 23142
        c/o Office of Research Services
        E-mail: ethicsoffice@mcmaster.ca

        Press SPACE to Continue
    KeyboardComponent space_to_continue3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Consent
    RoutineSettingsComponent Consent
      skipIf = skip
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    TextComponent consent
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        CONSENT

        I have read the information presented in the information letter about a study being conducted by Dr. Michael Schutz (and colleagues) of McMaster University. I have had the opportunity to ask questions about my involvement in this study and to receive additional details I requested. I understand that if I agree to participate in this study, I may withdraw from the study at any time. I agree to participate in the study.

        Press C if you consent to participate.
    KeyboardComponent consent_button
      allowedKeys = 'c'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Volume_Check
    RoutineSettingsComponent Volume_Check
      disabled = True
      skipIf = skip
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    TextComponent VolumeCheckText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Before we start the experiment check your volume.

        Press space to hear a tone, and adjust your volume to a comfortable level.

        Make sure that the volume does not change for the rest of the study!
    KeyboardComponent Volume_CheckSpace
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Volume_Check2
    RoutineSettingsComponent Volume_Check2
      disabled = True
      skipIf = skip
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    SoundComponent VolumeCheckTone
      forceEndRoutine = False
      sound [set every repeat] = wav/tone.wav
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Set your volume to a comfortable level based on this tone. Once you have found a comfortable level, do not change your volume for the rest of the study.

        Press SPACE once you have finished.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Debrief
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    TextComponent debrief
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        That's it. Thanks you for participating.

        The experiment you just participated in was focused on how we perceive loudness between sounds of differing timbres.



        Throughout the study, you were presented with pairs of tones that differed in loudness. Each time you responded in this experiment, the difference in loudness between the two tones would change, until it reached a point where the loudness difference is difficult or impossible to distinguish. This allows us to find the minimum threshold at which our hearing system is capable of perceiving loudness.

        With this we can better understand the mechanisms of auditory perception, which can have broader implications for areas such as industrial sound design.

        Contact information:
        Connor Wessel (wesselc@mcmaster.ca)
        Dr. Michael Schutz (Primary Investigator, schutz@mcmaster.ca)

        TO GET A PDF COPY OF THIS DEBRIEFING FORM EMAIL wesselc@mcmaster.ca

        Further reading:
        Grassi, M., & Darwin, C. J. (2006). The subjective duration of ramped and damped sounds. Perception & Psychophysics, 68(8), 1382–1392. https://doi.org/10.3758/BF03193737


        Leek, M. R. (2001). Adaptive procedures in psychophysical research. Perception & Psychophysics, 63(8), 1279–1292. https://doi.org/10.3758/BF03194543





        Press SPACE to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine questionnairePrompt
    RoutineSettingsComponent questionnairePrompt
      skipIf = skip
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    TextComponent questionnaie_Prompt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Next you will be asked a series of questions about your demography and musical experience

        If there is an issue where you cannot type your response:
        Windows -> Press F11 twice
        Mac -> minimize and maximize the your browser

        Press SPACE to continue
    KeyboardComponent questionnairePrompt_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine genderQ
    RoutineSettingsComponent genderQ
      skipIf = skip
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    TextComponent genderPrompt
      color = $[1,1,0]
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        Gender - I identify as:
        If other, please specify by typing a response and pressing return/enter.
    PolygonComponent Gender1Box
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, 0.25)
      shape = rectangle
      size = (0.35, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent Gender1
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Male
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    PolygonComponent Gender2Box
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, 0.15)
      shape = rectangle
      size = (0.35, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent Gender2
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Female
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    PolygonComponent Gender3Box
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0.0, 0.05)
      shape = rectangle
      size = (0.35, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent Gender3
      letterHeight = 0.05
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.0
      text = Prefer not to answer
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    TextComponent Other_Field
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Other:
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    CodeComponent textInput2
      Code Type = Both
      Begin JS Routine:
        modify = false;
        genderInput.text = "";
      Begin Routine:
        modify = False
        genderInput.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                genderInput.text = genderInput.text + ' '
            elif 'backspace' in keys:
                genderInput.text = genderInput.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            elif 'period' in keys:
                genderInput.text = genderInput.text + '.'
            elif 'comma' in keys:
                genderInput.text = genderInput.text + ','
            elif 'semicolon' in keys:
                genderInput.text = genderInput.text + ';'
            elif 'bracketleft' in keys:
                genderInput.text = genderInput.text + '['
            elif 'bracketright' in keys:
                genderInput.text = genderInput.text + ']'
            elif 'period' in keys:
                genderInput.text = genderInput.text + ';'
            elif 'slash' in keys:
                genderInput.text = genderInput.text + '/'
            elif 'backslash' in keys:
                genderInput.text = genderInput.text + '\ '
            elif 'minus' in keys:
                genderInput.text = genderInput.text + '-'
            elif 'equal' in keys:
                genderInput.text = genderInput.text + '='
            elif 'apostrophe' in keys:
                genderInput.text = genderInput.text + '"'
            elif 'quoteleft' in keys:
                genderInput.text = genderInput.text + '`'
            elif 'escape' in keys:
                genderInput.text = genderInput.text ='Thank You'
            elif '1' in keys and modify:
                genderInput.text = genderInput.text +'!'
                modify = False
            elif 'slash' in keys and modify:
                genderInput.text = genderInput.text +'??'
                modify = False
            elif '9' in keys and modify:
                genderInput.text = genderInput.text +'('
                modify = False
            elif '0' in keys and modify:
                genderInput.text = genderInput.text +')'
                modify = False
            elif  modify and 'semicolon' in keys:
                genderInput.text = genderInput.text +':'
                modify = False
            else:
                if modify:
                    genderInput.text = genderInput.text + keys[0].upper()
                    modify = False
                else:
                    genderInput.text = genderInput.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'period') {
            textAdd = '.';
        } else if (textAdd === 'comma') {
            textAdd = ',';
        } else if (textAdd === 'semicolon') {
            textAdd = ';';
        } else if (textAdd === 'bracketleft') {
            textAdd = ' ';
        } else if (textAdd === 'bracketright') {
            textAdd = ']';
        } else if (textAdd === 'slash') {
            textAdd = '/';
        } else if (textAdd === 'backslash') {
            textAdd = '\ ';
        } else if (textAdd === 'minus') {
            textAdd = '-';
        } else if (textAdd === 'space') {
            textAdd = ' ';
        } else if (textAdd === 'equal') {
            textAdd = '=';
        } else if (textAdd === 'apostrophe') {
            textAdd = '\'';
        } else if (textAdd === 'quoteleft') {
            textAdd = '`';
        } else if (textAdd === '1' && modify) {
            textAdd = '!';  // Add a space
        } else if (textAdd === 'backspace') {
            genderInput.text = genderInput.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                genderInput.text = genderInput.text + textAdd.toUpperCase();
                modify = false;
            } else {
                genderInput.text = genderInput.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", genderInput.text)
        genderInput.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", genderInput.text)
    TextComponent genderInput
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
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    MouseComponent ConfirmMouseGender
      clickable = Gender1Box, Gender2Box, Gender3Box
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine goldsmithLikert
    RoutineSettingsComponent goldsmithLikert
      skipIf = skip
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    TextComponent instruction
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please rate each response using the mouse. Click the button below to submit your response.
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    TextComponent likertPrompt
      color = $[1,1,0]
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
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    SliderComponent goldsmithRate
      forceEndRoutine = True
      granularity = 1
      labels = "   Completely Disagree    ","        Strongly Disagree   ","Disagree", "Neutral", "Agree","Strongly Agree","Completely Agree"
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.4, 0.03)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    PolygonComponent likertConfirmationBox
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, -0.3)
      shape = triangle
      size = (0.25, 0.25)
      startVal [time (s)] = $goldsmithRate.rating
      stopVal [duration (s)] = 1.0
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    TextComponent likertConfirmationText
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = $goldsmithRate.rating
      text = OK
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    MouseComponent likertClick
      clickable = likertConfirmationBox
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $goldsmithRate.rating
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  Routine genreQuestion
    RoutineSettingsComponent genreQuestion
      skipIf = skip
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    TextComponent qPrompt2
      color = $[1,1,0]
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    PolygonComponent responsebox1
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, 0.15)
      shape = triangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent response1
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r1
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    PolygonComponent responsebox2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      shape = triangle
      size = (0.35, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent response2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $r2
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    PolygonComponent responsebox3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, -0.15)
      shape = triangle
      size = (0.35, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent response3
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r3
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    MouseComponent mouse_2
      clickable = responsebox1, responsebox2, responsebox3
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine multipleChoice
    RoutineSettingsComponent multipleChoice
      skipIf = skip
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    TextComponent mcresponseprompt
      color = $[1,1,0]
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    PolygonComponent mcresponsebox1
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, 0.25)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse1
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r1
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    PolygonComponent mcresponsebox2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, 0.15)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse2
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r2
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    PolygonComponent mcresponsebox3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0.0, 0.05)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse3
      letterHeight = 0.05
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r3
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    PolygonComponent mcresponsebox4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, -0.05)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse4
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r4
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    PolygonComponent mcresponsebox5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, -0.15)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse5
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r5
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    PolygonComponent mcresponsebox6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, -0.25)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse6
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r6
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    PolygonComponent mcresponsebox7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, -0.35)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse7
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r7
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    MouseComponent mouse_3
      clickable = mcresponsebox1, mcresponsebox2, mcresponsebox3, mcresponsebox4, mcresponsebox5, mcresponsebox6, mcresponsebox7 
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 1
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  Routine multipleChoice2
    RoutineSettingsComponent multipleChoice2
      skipIf = skip
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    TextComponent mcresponseprompt2
      color = $[1,1,0]
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Q
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    PolygonComponent mcresponsebox1_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, 0.25)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse1_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Re1
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    PolygonComponent mcresponsebox2_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, 0.15)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse2_2
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Re2
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    PolygonComponent mcresponsebox3_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0.0, 0.05)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse3_2
      letterHeight = 0.05
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Re3
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    PolygonComponent mcresponsebox4_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, -0.05)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse4_2
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Re4
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    PolygonComponent mcresponsebox5_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, -0.15)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse5_2
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Re5
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    PolygonComponent mcresponsebox6_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (0, -0.25)
      shape = rectangle
      size = (0.65, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent mcresponse6_2
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Re6
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    MouseComponent mouse_5
      clickable = mcresponsebox1_2, mcresponsebox2_2, mcresponsebox3_2, mcresponsebox4_2, mcresponsebox5_2, mcresponsebox6_2
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 1
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  Routine typedResponse
    RoutineSettingsComponent typedResponse
      skipIf = skip
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    TextComponent TypedRespprompt
      color = White
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $typePrompt
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    TextboxComponent textbox
      bold = False
      editable = True
      fillColor = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = Type a response
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    TextComponent endButton
      letterHeight = 0.04
      pos = (0, -0.40)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Click HERE when you have typed your response
    MouseComponent mouse_4
      clickable = endButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine general_break
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    CodeComponent code_gb
      Code Type = JS
      Begin JS Routine:
        if (((trials.thisN + 1) % break_num != 0 || breaks == 0)) {
            continueRoutine = false
            }
    TextComponent text_gb1
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You now have a chance to take a break."
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    TextComponent text_gb2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You have currently completed " + (trials.thisN + 1) + " trials, and have spent " + (Math.floor(globalClock.getTime() / 60)) + " minutes on the task."
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    TextComponent text_gb3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_gb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blocks_break
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    CodeComponent code_bb
      Code Type = JS
      Begin JS Routine:
        if ((break_time == false || block_index == (block_array.length))) {
            continueRoutine = false;
            } else {
                break_time = false;
                }
    TextComponent text_bb4
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You have reached the end of Block " + str(block_index) + ", and have a chance to take a break."
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    TextComponent text_bb5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You have currently completed " + (trials.thisN + 1) + " trials, and have spent " + (Math.floor(globalClock.getTime() / 60)) + " minutes on the task."
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    TextComponent text_bb6
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_bb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_question
    RoutineSettingsComponent end_question
      disabled = True
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If given the opportunity in the future, would you be interested in participating in more of these experiments in exchange for paid compensation?

        Press 'Y' for yes or 'N' for no.

        Your interest or lack thereof does not obligate or prohibit you from this opportunity. If you say yes, we may contact you later on via email to ask if you would still be interested.

        If you change your mind afterwards, please feel free to contact the experimenter to let them know.

        Press either 'Y' or 'N' to end.
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine testing
    RoutineSettingsComponent testing
      disabled = True
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    CodeComponent testcode
      Code Type = JS
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      Begin JS Routine:
        // Pre-trial organisation
        current_direction = 0;
        if ((order_mode == 2 || order_mode == 6) && trial_indexer == trial_index_array.length) { // In fully random staircase order, the order is shuffled at every reset.
            fisher_yate(trial_index_array);
            fisher_yate(trial_index_array);
            }
        if ((order_mode < 3 || order_mode == 6) && trial_indexer < trial_index_array.length) { // In non-blocked orders, this increases the staircase index at the beginning of each trial
            trial_indexer += 1;
            trial_index = trial_index_array[trial_indexer - 1];
            } else if (order_mode < 4 || order_mode == 6) { // When the highest staircase index is reached, it is reset back to the beginning
                trial_indexer = 1;
                trial_index = trial_index_array[trial_indexer - 1];
                }

        if (env_types[env_array[trial_index]][1] == "perc") {
            min_level = (min_num - perc_array[trial_index]);
            max_level = (max_num - perc_array[trial_index]);
            } else {
                min_level = (min_num - flat_array[trial_index]);
                max_level = (max_num - flat_array[trial_index]);
                }

        trial_counter_array[trial_index] += 1; // Add to total trial count for each staircase

        randint = Math.floor(Math.random() * (rand_max - rand_min)) + rand_min;

        // Decide first and second value when envelope is identical
        if (env_types[env_array[trial_index]][0] == env_types[env_array[trial_index]][1]) {
            if (env_types[env_array[trial_index]][0] == "perc") {
                first = perc_array[trial_index] + randint;
                second = perc_array[trial_index] + level_array[trial_index] + randint;
                } else {
                    first = flat_array[trial_index] + randint;
                    second = flat_array[trial_index] + level_array[trial_index] + randint;
                    }
                }

        // Decide first and second value when envelope is different (adjust percussive tone)
        if (env_types[env_array[trial_index]][0] != env_types[env_array[trial_index]][1]) {
            if (env_types[env_array[trial_index]][0] == "perc") {
                first = perc_array[trial_index] + randint;
                second = flat_array[trial_index] + level_array[trial_index] + randint;
                } else {
                    first = flat_array[trial_index] + randint;
                    second = perc_array[trial_index] + level_array[trial_index] + randint;
                    }
                }

        if ((second < min_num)) { // Insurance if second number exceeds boundaries
            second = min_num;
            first = min_num - level_array[trial_index];
            //level_array[trial_index] = min_level;
            } else if ((second > max_num)) {
                second = max_num;
                first = max_num - level_array[trial_index];
                //level_array[trial_index] = max_level;
                }

        // Create pathway to sound file.
        s1_file = String(ext + "/" + env_types[env_array[trial_index]][0] + "_" + first + "." + ext); // First sound file
        s2_file = String(ext + "/" + env_types[env_array[trial_index]][1] + "_" + second + "." + ext); // Second sound file

        if ((rand_stim == 0)) {
            s1 = s1_file;
            s2 = s2_file;
            }


        // If rand_stim is enabled, jumble the order of the standard and comparitor sound
        if ((rand_stim == 1)) {
            let coin = Math.floor(Math.random() * 2) + 1; // Flip a coin
            if ((coin == 1)) { // Standard then comparitor
                s1 = s1_file;
                s2 = s2_file;
                stim_order = "SC";
                } else { // Comparitor then standard
                    s1 = s2_file;
                    s2 = s1_file;
                    stim_order = "CS";
                    }
                }
      End JS Routine:
        if (correctanswer == 0) { // Which kind of response is being used?
            var resp = (key_resp.keys - 1);
        //    var resp = 1;
            } else {
                var resp = key_resp.corr;
                }

        if ((stim_order == "CS" && resp == 0)) { // When stimulus order is reversed, response needs to be reversed as well
            resp = 1;
            } else if ((stim_order == "CS")) {
                resp = 0;
                }

        psychoJS.experiment.addData("level", level_array[trial_index]); // Add intensity value to dataset before it is changed.

        // When the response given is longer, add to the decrease counter
        if (((resp == 1) && (level_array[trial_index] >= min_level))) {
            down_counter_array[trial_index] += 1;
            up_counter_array[trial_index] = 0;
        }
        // When the response given is shorter, add to the increase counter
        if (((resp == 0) && (level_array[trial_index] <= max_level))) {
            up_counter_array[trial_index] += 1;
            down_counter_array[trial_index] = 0;
        }
        // Once the decrease counter is maxed, decrease the difference
        if ((down_counter_array[trial_index] == freq_down_array[trial_index])) {
            level_array[trial_index] -= step_size_down[step_index_array[trial_index]];
            current_direction = -1;
            if ((level_array[trial_index] < min_level)) { // Value is set to minimum if it would dip below.
                level_array[trial_index] = min_level;
                }
            down_counter_array[trial_index] = 0; // Trials must be consecutive, so counter is reset
        }
        // Once the increase counter is maxed, increase the difference
        if ((up_counter_array[trial_index] == freq_up_array[trial_index])) {
            level_array[trial_index] += step_size_up[step_index_array[trial_index]];
            current_direction = 1;
            if ((level_array[trial_index] > max_level)) { // Value is set to maximum if it would dip above.
                level_array[trial_index] = max_level;
                }
            up_counter_array[trial_index] = 0; // Trials must be consecutive, so counter is reset
        }

        // Detects reversals
        if ((first_rev_array[trial_index] == 1 && current_direction != 0 && current_direction != last_direction_array[trial_index])) { // Up response on last trial/down response on current trial or vice versa
                l_reversal_array[trial_index] = 1; // This trial is a reversal
                n_reversal_array[trial_index] += 1; // Add to total reversal counter
                c_reversal_array[trial_index] += 1; // Add to consecutive reversal counter
                freq_index_array[trial_index] += 1; // Increase step frequency index
                last_direction_array[trial_index] = current_direction;
                if ((step_index_array[trial_index] >= step_size_down.length - 1)) { // Consecutive reversal stop counter
                    c_stop_array[trial_index] += 1;
                    }
                } else if ((first_rev_array[trial_index] == 1 && current_direction != 0 && current_direction == last_direction_array[trial_index])) {
                    l_reversal_array[trial_index] = 0; // This trial is NOT a reversal
                    c_reversal_array[trial_index] = 0; // Consecutive reversal counter reset
                    c_stop_array[trial_index] = 0; // Same as above
                    last_direction_array[trial_index] = current_direction;
                    } else {
                        l_reversal_array[trial_index] = 0; // This trial is NOT a reversal
                        }

        if ((first_rev_array[trial_index] == 0 && current_direction != 0)) {
            first_rev_array[trial_index] = 1;
            last_direction_array[trial_index] = current_direction;
            }

        // Prevent frequency index from exceeding array length
        if ((freq_index_array[trial_index] > freq_step_down.length - 1)) {
            freq_index_array[trial_index] = freq_step_down.length - 1;
            }

        // Changes which step size within the step list is being used based on reversals
        if (((n_reversal_array[trial_index] <= step_size_down.length - 1) && (l_reversal_array[trial_index] == 1))) { // Number of reversals is less than step list size, and current trial is a reversal.
            step_index_array[trial_index] += 1; // Move to next value in step list
            } else if (((n_reversal_array[trial_index] > step_size_down.length) && (l_reversal_array[trial_index] == 1))) { // If reversals have exceeded the step list size
                step_index_array[trial_index] = (step_size_down.length - 1); // Cap step_index at the length of step list
                }

        // Add variables to dataset
        psychoJS.experiment.addData("trial_index", (trial_index + 1));
        psychoJS.experiment.addData("trial_indexer", trial_indexer);
        psychoJS.experiment.addData("trial_num", trial_counter_array[trial_index]);
        psychoJS.experiment.addData("first", first);
        psychoJS.experiment.addData("second", second);
        psychoJS.experiment.addData("random", randint);
        psychoJS.experiment.addData("envelope_1", env_types[env_array[trial_index]][0]);
        psychoJS.experiment.addData("envelope_2", env_types[env_array[trial_index]][1]);
        psychoJS.experiment.addData("sound1", s1);
        psychoJS.experiment.addData("sound2", s2);
        psychoJS.experiment.addData("n_reversal", n_reversal_array[trial_index]);
        psychoJS.experiment.addData("c_reversal", c_reversal_array[trial_index]);
        psychoJS.experiment.addData("c_stop", c_stop_array[trial_index]);
        psychoJS.experiment.addData("l_reversal", l_reversal_array[trial_index]);
        psychoJS.experiment.addData("t_step_size_up", step_size_up[step_index_array[trial_index]]);
        psychoJS.experiment.addData("t_step_size_down", step_size_down[step_index_array[trial_index]]);
        psychoJS.experiment.addData("stim_order", stim_order);
        psychoJS.experiment.addData("resp", resp);
        psychoJS.experiment.addData("block", block_index + 1);

        // Stop parameters

        // When either total reversals or consecutive reversals are reached in a specific staircase, remove it from trials
        if (((stop_mode == 1 && n_reversal_array[trial_index] == stop_num) || (stop_mode == 2 && c_stop_array[trial_index] == stop_num))) { // Terminate particular trial if total reversal cap is reached
            let index = trial_index_array.indexOf(trial_index);
            if (index > -1) {
                trial_index_array.splice(index, 1);
                }
            if (order_mode > 2 && order_mode < 6) { // In blocked trials, the staircase index is only increased when the prior staircase is terminated
                trial_indexer += 1;
                trial_index = trial_index_array[trial_indexer -1];
                }
            }

        if ((trial_counter_array[trial_index] == max_trials)) { // Terminate staircase if max trials are reached
            let index = trial_index_array.indexOf(trial_index);
            if (index > -1) {
                trial_index_array.splice(index, 1);
                }
            }

        // When all staircases have been removed, the whole routine is terminated. (unless using interleaved blocks)
        if ((trial_index_array.length == 0 && order_mode != 6)) {
            trials.finished = 1;
            }

        // Different procedure for interleaved blocks - must exhaust all blocks first before experiment is terminated
        if (trial_index_array.length == 0 && order_mode == 6 && block_index < (block_array.length - 1)) {
            block_index += 1;
            trial_indexer = 0;
            trial_index_array = block_array[block_index];
            break_time = true;
            } else if (order_mode == 6 && trial_index_array.length == 0 && block_index == (block_array.length - 1)) {
                trials.finished = 1;
                }
    ResourceManagerComponent testresource
      actionType = Start and Check
      checkAll = False
      disabled = True
      forceEndRoutine = False
      resources = ['$sound2', '$sound1']
      startVal [time (s)] = 0
  Routine trials_sim
    RoutineSettingsComponent trials_sim
      disabled = True
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    CodeComponent trial_setup_5
      Code Type = JS
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      Begin JS Routine:
        // Pre-trial organisation
        current_direction = 0;
        if ((order_mode == 2 || order_mode == 6) && trial_indexer == trial_index_array.length) { // In fully random staircase order, the order is shuffled at every reset.
            fisher_yate(trial_index_array);
            fisher_yate(trial_index_array);
            }
        if ((order_mode < 3 || order_mode == 6) && trial_indexer < trial_index_array.length) { // In non-blocked orders, this increases the staircase index at the beginning of each trial
            trial_indexer += 1;
            trial_index = trial_index_array[trial_indexer - 1];
            } else if (order_mode < 4 || order_mode == 6) { // When the highest staircase index is reached, it is reset back to the beginning
                trial_indexer = 1;
                trial_index = trial_index_array[trial_indexer - 1];
                }

        if (env_types[env_array[trial_index]][1] == "perc") {
            min_level = (min_num - perc_array[trial_index]);
            max_level = (max_num - perc_array[trial_index]);
            } else {
                min_level = (min_num - flat_array[trial_index]);
                max_level = (max_num - flat_array[trial_index]);
                }

        trial_counter_array[trial_index] += 1; // Add to total trial count for each staircase

        randint = Math.floor(Math.random() * (rand_max - rand_min)) + rand_min;

        // Decide first and second value when envelope is identical
        //if (env_types[env_array[trial_index]][0] == env_types[env_array[trial_index]][1]) {
            if (env_types[env_array[trial_index]][0] == "perc") {
                first = perc_array[trial_index] + randint;
                second = perc_array[trial_index] + level_array[trial_index] + randint;
                } else {
                    first = flat_array[trial_index] + randint;
                    second = flat_array[trial_index] + level_array[trial_index] + randint;
                    }
         //       }

        // Decide first and second value when envelope is different (adjust percussive tone)
        //if (env_types[env_array[trial_index]][0] != env_types[env_array[trial_index]][1]) {
        //    if (env_types[env_array[trial_index]][0] == "perc") {
        //        first = perc_array[trial_index] + randint;
        //        second = flat_array[trial_index] + level_array[trial_index] + randint;
        //        } else {
        //            first = flat_array[trial_index] + randint;
        //            second = perc_array[trial_index] + level_array[trial_index] + randint;
        //            }
        //        }

        adjust = 0;
        if ((second < min_num)) { // Insurance if second number exceeds boundaries
            adjust = second - min_num;
            first = first - adjust;
            second = second - adjust;
            //first = min_num + Math.abs(level_array[trial_index]);
            //second = first + level_array[trial_index];
            //level_array[trial_index] = min_level;
            } else if ((second > max_num)) {
                adjust = second - max_num;
                first = first - adjust;
                second = second - adjust;
                //first = max_num - Math.abs(level_array[trial_index]);
                //second = first + level_array[trial_index];
                //level_array[trial_index] = max_level;
                }

        // Create pathway to sound file.
        s1_file = String(ext + "/" + env_types[env_array[trial_index]][0] + "_" + first + "." + ext); // First sound file
        s2_file = String(ext + "/" + env_types[env_array[trial_index]][1] + "_" + second + "." + ext); // Second sound file

        if ((rand_stim == 0)) {
            s1 = s1_file;
            s2 = s2_file;
            }

        // If rand_stim is enabled, jumble the order of the standard and comparitor sound
        if ((rand_stim == 1)) {
            let coin = Math.floor(Math.random() * 2) + 1; // Flip a coin
            if ((coin == 1)) { // Standard then comparitor
                s1 = s1_file;
                s2 = s2_file;
                stim_order = "SC";
                } else { // Comparitor then standard
                    s1 = s2_file;
                    s2 = s1_file;
                    stim_order = "CS";
                    }
                }

        //resources = String('psychoJS.serverManager.prepareResources(["' + s1 + '", "' + s2 + '"])');
        //eval(resources);
        //var mySound;
        //var now;
        //mySound = new sound.Sound({"win": psychoJS.window, "value": 660, "volume": 1, "dur": 0.25});
        //now = TrialsClock;
      Each JS Frame:
        //console.log(TrialsClock.getTime());

        //if ((TrialsClock.getTime > 1.5 && TrialsClock.getTime < 1.6 && mySound.isPlaying == false)) {
        //    mySound.play();
        //    }
      End JS Routine:
        if (correctanswer == 0) { // Which kind of response is being used?
        //    var resp = (key_resp.keys - 1);
            var resp = 1;
            } else {
                var resp = key_resp.corr;
                }

        if ((stim_order == "CS" && resp == 0)) { // When stimulus order is reversed, response needs to be reversed as well
            resp = 1;
            } else if ((stim_order == "CS")) {
                resp = 0;
                }

        psychoJS.experiment.addData("level", level_array[trial_index]); // Add intensity value to dataset before it is changed.

        // When the response given is longer, add to the decrease counter
        if (((resp == 0) && (level_array[trial_index] >= min_level))) {
            down_counter_array[trial_index] += 1;
            up_counter_array[trial_index] = 0;
        }
        // When the response given is shorter, add to the increase counter
        if (((resp == 1) && (level_array[trial_index] <= max_level))) {
            up_counter_array[trial_index] += 1;
            down_counter_array[trial_index] = 0;
        }
        // Once the decrease counter is maxed, decrease the difference
        if ((down_counter_array[trial_index] == freq_down_array[trial_index])) {
            level_array[trial_index] -= step_size_down[step_index_array[trial_index]];
            current_direction = -1;
            if ((level_array[trial_index] < min_level)) { // Value is set to minimum if it would dip below.
                level_array[trial_index] = min_level;
                }
            down_counter_array[trial_index] = 0; // Trials must be consecutive, so counter is reset
        }
        // Once the increase counter is maxed, increase the difference
        if ((up_counter_array[trial_index] == freq_up_array[trial_index])) {
            level_array[trial_index] += step_size_up[step_index_array[trial_index]];
            current_direction = 1;
            if ((level_array[trial_index] > max_level)) { // Value is set to maximum if it would dip above.
                level_array[trial_index] = max_level;
                }
            up_counter_array[trial_index] = 0; // Trials must be consecutive, so counter is reset
        }

        // Detects reversals
        if ((first_rev_array[trial_index] == 1 && current_direction != 0 && current_direction != last_direction_array[trial_index])) { // Up response on last trial/down response on current trial or vice versa
                l_reversal_array[trial_index] = 1; // This trial is a reversal
                n_reversal_array[trial_index] += 1; // Add to total reversal counter
                c_reversal_array[trial_index] += 1; // Add to consecutive reversal counter
                freq_index_array[trial_index] += 1; // Increase step frequency index
                last_direction_array[trial_index] = current_direction;
                if ((step_index_array[trial_index] >= step_size_down.length - 1)) { // Consecutive reversal stop counter
                    c_stop_array[trial_index] += 1;
                    }
                } else if ((first_rev_array[trial_index] == 1 && current_direction != 0 && current_direction == last_direction_array[trial_index])) {
                    l_reversal_array[trial_index] = 0; // This trial is NOT a reversal
                    c_reversal_array[trial_index] = 0; // Consecutive reversal counter reset
                    c_stop_array[trial_index] = 0; // Same as above
                    last_direction_array[trial_index] = current_direction;
                    } else {
                        l_reversal_array[trial_index] = 0; // This trial is NOT a reversal
                        }

        if ((first_rev_array[trial_index] == 0 && current_direction != 0)) {
            first_rev_array[trial_index] = 1;
            last_direction_array[trial_index] = current_direction;
            }

        // Prevent frequency index from exceeding array length
        if ((freq_index_array[trial_index] > freq_step_down.length - 1)) {
            freq_index_array[trial_index] = freq_step_down.length - 1;
            }

        // Changes which step size within the step list is being used based on reversals
        if (((n_reversal_array[trial_index] <= step_size_down.length - 1) && (l_reversal_array[trial_index] == 1))) { // Number of reversals is less than step list size, and current trial is a reversal.
            step_index_array[trial_index] += 1; // Move to next value in step list
            } else if (((n_reversal_array[trial_index] > step_size_down.length) && (l_reversal_array[trial_index] == 1))) { // If reversals have exceeded the step list size
                step_index_array[trial_index] = (step_size_down.length - 1); // Cap step_index at the length of step list
                }

        // Add variables to dataset
        //psychoJS.experiment.addData("Participant", subject);
        psychoJS.experiment.addData("session", session);
        psychoJS.experiment.addData("trial_index", (trial_index + 1));
        psychoJS.experiment.addData("trial_indexer", trial_indexer);
        psychoJS.experiment.addData("trial_num", trial_counter_array[trial_index]);
        psychoJS.experiment.addData("first", first);
        psychoJS.experiment.addData("second", second);
        psychoJS.experiment.addData("random", randint);
        psychoJS.experiment.addData("adjust", adjust);
        psychoJS.experiment.addData("envelope_1", env_types[env_array[trial_index]][0]);
        psychoJS.experiment.addData("envelope_2", env_types[env_array[trial_index]][1]);
        psychoJS.experiment.addData("sound1", s1);
        psychoJS.experiment.addData("sound2", s2);
        psychoJS.experiment.addData("n_reversal", n_reversal_array[trial_index]);
        psychoJS.experiment.addData("c_reversal", c_reversal_array[trial_index]);
        psychoJS.experiment.addData("c_stop", c_stop_array[trial_index]);
        psychoJS.experiment.addData("l_reversal", l_reversal_array[trial_index]);
        psychoJS.experiment.addData("t_step_size_up", step_size_up[step_index_array[trial_index]]);
        psychoJS.experiment.addData("t_step_size_down", step_size_down[step_index_array[trial_index]]);
        psychoJS.experiment.addData("stim_order", stim_order);
        psychoJS.experiment.addData("resp", resp);
        psychoJS.experiment.addData("block", block_index + 1);

        // Stop parameters

        // When either total reversals or consecutive reversals are reached in a specific staircase, remove it from trials
        if (((stop_mode == 1 && n_reversal_array[trial_index] == stop_num) || (stop_mode == 2 && c_stop_array[trial_index] == stop_num))) { // Terminate particular trial if total reversal cap is reached
            let index = trial_index_array.indexOf(trial_index);
            if (index > -1) {
                trial_index_array.splice(index, 1);
                }
            if (order_mode > 2 && order_mode < 6) { // In blocked trials, the staircase index is only increased when the prior staircase is terminated
                trial_indexer += 1;
                trial_index = trial_index_array[trial_indexer -1];
                }
            }

        if ((trial_counter_array[trial_index] == max_trials)) { // Terminate staircase if max trials are reached
            let index = trial_index_array.indexOf(trial_index);
            if (index > -1) {
                trial_index_array.splice(index, 1);
                }
            }

        // When all staircases have been removed, the whole routine is terminated. (unless using interleaved blocks)
        if ((trial_index_array.length == 0 && order_mode != 6)) {
            trials.finished = 1;
            }

        // Different procedure for interleaved blocks - must exhaust all blocks first before experiment is terminated
        if (trial_index_array.length == 0 && order_mode == 6 && block_index < (block_array.length - 1)) {
            block_index += 1;
            trial_indexer = 0;
            trial_index_array = block_array[block_index];
            break_time = true;
            } else if (order_mode == 6 && trial_index_array.length == 0 && block_index == (block_array.length - 1)) {
                trials.finished = 1;
                }
    ResourceManagerComponent hello_2
      actionType = Start and Check
      checkAll = False
      disabled = True
      forceEndRoutine = False
      resources = ['$sound2', '$sound1']
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
    TextComponent fixation_3
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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    TextComponent number_4
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = First sound
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    SoundComponent sound_5
      disabled = True
      forceEndRoutine = False
      sound [set every repeat] = $s1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      volume [set every repeat] = 1
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    TextComponent number_5
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 1.9
      text [set every repeat] = Second sound
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    SoundComponent sound_6
      disabled = True
      forceEndRoutine = False
      sound [set every repeat] = $s2
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 2.0
      volume [set every repeat] = 1
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    TextComponent text_5
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 5.0
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      text [set every repeat]:
        Which of the two sounds was louder?

        Press either '1' or '2' for the first or second sound respectively.
    KeyboardComponent key_resp_9
      allowedKeys [set every repeat] = '1','2'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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  Routine practice_intro
    RoutineSettingsComponent practice_intro
      skipIf = skip
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now complete 8 practice trials.

        You will receive feedback on whether you were correct or not.

        Remember to press '1' if the first sound is louder, or '2' if the second sound is louder.

        Press SPACEBAR to begin.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_1
    RoutineSettingsComponent routine_1
      skipIf = skip
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    CodeComponent fb_code
      Code Type = JS
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      Begin JS Routine:
        fb_text = "no key_resp component found - look at the Std out window for info";
        fb_col = "black";
        try {
            if (key_resp_p.corr) {
                fb_text = "Correct!";
                fb_col = "green";
            } else {
                fb_text = "Incorrect";
                fb_col = "red";
            }
        } catch(e) {
            console.log("Make sure that you have:\n1. a routine with a keyboard component in it called \"key_resp\"\n 2. In the key_Resp component in the \"data\" tab select \"Store Correct\".\n in the \"Correct answer\" field use \"$corrAns\" (where corrAns is a column header in your conditions file indicating the correct key press");
        }
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine practice_trial
    RoutineSettingsComponent practice_trial
      skipIf = skip
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    ResourceManagerComponent hello_3
      actionType = Start and Check
      checkAll = False
      disabled = True
      forceEndRoutine = False
      resources = ['$sound2', '$sound1']
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
    TextComponent fixation_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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    TextComponent number_6
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = First sound
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    SoundComponent sound_7
      forceEndRoutine = False
      sound [set every repeat] = $ref
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      volume [set every repeat] = 1
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    TextComponent number_7
      letterHeight = 0.05
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 1.9
      text [set every repeat] = Second sound
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    SoundComponent sound_8
      forceEndRoutine = False
      sound [set every repeat] = $tar
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 2.0
      volume [set every repeat] = 1
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 5.0
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      text [set every repeat]:
        Which of the two sounds was louder?

        Press either '1' or '2' for the first or second sound respectively.
    KeyboardComponent key_resp_p
      allowedKeys [set every repeat] = '1','2'
      correctAns = $cor
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      storeCorrect = True
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  Routine real_intro
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    CodeComponent initial_setup
      Code Type = JS
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      Before JS Experiment:
        // Parameters - change these based on the needs of the experiment
        const min_num = 0; // Minimum value of stimulus parameter
        const max_num = 320; // Maximum value of stimulus parameter
        const rand_min = -40; // Minimum value of random adjustment on each trial
        const rand_max = 40; // Maximum value of random adjustment on each trial
        const build_type = 1; // How should factor combinations be generated?
        // 1 = Automatic
        // 2 = Manual (note that loops and param_order is ignored)
        const loops = 1; // How many times should the conditions be repeated?
        //const subject = 1;
        const session = 1;
        var independents = [];
           independents["start_first"] = [];
           independents["env"] = [0,1];
           independents["start_level"] = [40, -40];
        //const start_first_flat = [90, 170]; // Parameter values for the first number stimulus with flat envelope (array of values)
        //const start_first_perc = [130, 210]; // Parameter values for the first number stimulus with percussive envelope (array of values)
        const param_order = 1; // If 1, trials are ordered by start_first. If 2, they are ordered by env.
        const step_size_up = [8,8,4,4,2,2,1]; // How large should increases in intensity be across the experiment? (array of values)
        const step_size_down = [8,8,4,4,2,2,1]; // How large should decreases in intensity be across the experiment? (array of values)
        const freq_step_up = [1, 2]; // How many consecutive (same response) trials should lead to an increase in step size across the experiment? (array of values)
        const freq_step_down = [2, 1]; // How many consecutive (same response) trials should lead to a decrease in step size across the experiment? (array of values)
        const order_mode = 6; // See below for options:
        // 1 = Fixed random staircase order - A random order of staircase presentation is determined at the beginning of the experiment and looped.
        // 2 = Fluid random staircase order - A random order of staircase presentation is determined everytime a response has been provided on all staircases.
        // 3 = Ordered - Staircases are presented sequentially in a single block.
        // 4 = Randomly ordered blocks - Staircases are presented in randomly ordered, individual blocks (not interleaved).
        // 5 = Sequential block - Staircases are presented in individual blocks (not interleaved).
        // 6 = Interleaved blocks - Staircases are presented in a specified number of pairs within randomly ordered blocks
        const pair_num = 4; // (order_mode must equal 6) - How many staircases do you want to be in each block?
        const blockrandom = 1; // (order_mode must equal 6) - Should order of staircases be completely random?
        const stop_mode = 1; // See options below:
        // 0 = Participants complete all trials in all staircases.
        // 1 = Staircases are terminated after they reach a total number of reversals.
        // 2 = Staircases are terminated after they reach a consecutive number of reversals.
        const stop_num = 10; // In stop_mode 1 and 2, number of trials that causes termination.
        const max_trials = 100; // Set the maximum number of trials for each staircase (so the whole experiment will have a maximum of (max_trials * length of start_first * length of env) trials)
        const ext = "wav"; // File extension and directory name for stimuli
        const correctanswer = 0; // If 0, then there is no correct response in this experiment. If 1, then correct responses are used for determining steps and reversals.
        const rand_stim = 1; // If 0, standard is always presented first in a trial. If 1, order of standard and comparitor is randomised.
        const breaks = 0; // If set to 1, participants will be given opportunities to take breaks.
        const break_num = 10; // Number of trials required for a break to occur.
        const env_types = [["flat", "perc"], ["perc", "flat"], ["flat", "flat"], ["perc", "perc"], ["revperc", "revperc"]]; // Envelope combo types

        // Global variables - avoid changing these
        var skip = 0; // Used for skipping brief in debugging
        var skipval = [ "s", "k", "i", "p", "space" ]; // Skip the Goldsmith keys
        var first; // The value of the first stimulus
        var second; // The value of the second stimulus (if applicable)
        var randint;
        var trial_index; // Which interleaved trial is currently being used?
        var trial_indexer = 0; // Index value for trial_index
        var last_result_array = []; // Was the last answer up or down?
        //var flat_array = start_first_flat; // Array made from first values and envelope combinations
        //var perc_array = start_first_perc; // Array made from first values and envelope combinations
        var flat_array = []; // Array made from first values and envelope combinations
        var perc_array = []; // Array made from first values and envelope combinations
        //var level_array = start_level; // Array made from difference values and envelope combinations
        //var env_array = env; // Array made from envelope values and first/difference combinations
        var level_array; // Array made from difference values and envelope combinations
        var env_array; // Array made from envelope values and first/difference combinations
        var step_index_array = []; // Determines the step size within each staircase
        var freq_index_array = []; // Keeps track the number of consecutive responses that leads to a change for each staircase
        var freq_up_array = [];
        var freq_down_array = [];
        var trial_index_array = []; // Keeps track of the order of staircases
        var up_counter_array = []; // Counter for consecutive up responses in each staircase
        var down_counter_array = []; // Counter for consecutive down responses in each staircase
        var l_reversal_array = []; // Keeps track of whether the last trial was a reversal in each staircase
        var n_reversal_array = []; // Keeps track of the total number of reversals in each staircase
        var c_reversal_array = []; // Keeps track of consecutive reversals in each staircase
        var c_stop_array = []; // Keeps track of consecutive reversals once step size is at minimum (stop parameter is now imminent).
        var block_array = []; // Array of trial indices within each block in an interleaved blocks design.
        var block_index = 0; // Keeps track of which interleaved block is active
        var s1_file; // The first sound file
        var s2_file; // The second sound file
        var s1 = s1_file; // The first sound variable
        var s2 = s2_file; // The second sound variable
        var stim_order = "SC"; // Order of standard/comparitor in trial for dataset
        var num_trials; // Number of trials in the experiment
        var trial_counter_array = []; // Counts the total number of trials passed in each staircase
        var resp; // Substitute for key response or correct response
        var break_time = false; // Breaktimes for interleaved blocks design
        var time;
        var current_direction;
        var last_direction_array = [];
        var first_rev_array = [];
        var min_level; // Minimum value of stimulus intensity
        var max_level; // Maximum value of stimulus intensity
        var keys;
        var values;
        var offset1;
        var offset2;
        var offset3;
        var resources;
        var adjust = 0;


        // Functions

        // Fisher-Yates Shuffler - Randomly orders a list
        function fisher_yate(array) {
            for (let i = array.length -1; i > 0; i--) { // Loops around the length of a list
                let j = Math.floor(Math.random() * i) // Random position for each item in the list
                let k = array[i] // Item from the list
                array[i] = array[j] // Foundation i is moved to position j
                array[j] = k // Item from list is placed on foundation
                }
            }


        function make_condition(array) {
          let conds = [];
          let v = array.map(function f(arr) {return arr.length});
          let fact = v.reduce(function f(t, n) {return t * n});
          let factperm = fact;
          let newtem;
            for (let i = 0; i < (array.length); i++) {
              let temp = [];
              for (let j = 0; j < (array[i].length); j++) {
                while (temp.length < ((fact / array[i].length) * (j + 1))) {
                  temp.push(array[i][j]);
                }
              }
            newtem = [...temp];
            while (temp.length < factperm) {
              temp.push(...newtem);
            }
            conds[i] = temp;
            if ((fact / array[i].length) < fact) {
              fact = fact / array[i].length;
            }
            }
            return conds;
        }

        var start_ids = [90,130,170,210];
        fisher_yate(start_ids);
        fisher_yate(start_ids);
        const start_first_flat = [start_ids[0], start_ids[1]];
        const start_first_perc = [start_ids[2], start_ids[3]];
        var flat_array = start_first_flat;
        var perc_array = start_first_perc;
      Begin JS Experiment:
        independents["start_first"] = Array(start_first_flat.length).fill().map((element, index) => index);

        keys = Object.keys(independents);
        values = Object.values(independents);

        conditions = make_condition(values);


        flat_array = [];
        perc_array = [];
        for (let i = 0; i < conditions[1].length; i++) {
          flat_array[i] = start_first_flat[conditions[keys.indexOf("start_first")][i]];
          perc_array[i] = start_first_perc[conditions[keys.indexOf("start_first")][i]];
        }


        env_array = conditions[keys.indexOf("env")];
        level_array = conditions[keys.indexOf("start_level")];
        while (freq_up_array.length < level_array.length) {
            freq_up_array = freq_up_array.concat(freq_step_up);
            freq_down_array = freq_down_array.concat(freq_step_down);
            }


        //if (build_type == 2) {
        //    flat_array = start_first_flat;
        //    perc_array = start_first_perc;
        //    level_array = start_level;
        //    env_array = env;
        //    }

        // Add number of loops
        if (build_type == 1) {
            for (let i = 1; i < loops; i++) {
                flat_array = flat_array.concat(flat_array);
                perc_array = perc_array.concat(perc_array);
                level_array = level_array.concat(level_array);
                env_array = env_array.concat(env_array);
                freq_up_array = freq_up_array.concat(freq_up_array);
                freq_down_array = freq_down_array.concat(freq_down_array);
                }
            }

        // Create a list of nested arrays for interleaved blocked designs
        for (let i = 0; i < (flat_array.length / pair_num); i++) {
          block_array.push([]);
        }


        if (blockrandom == 1) {
          var blockrandlist = [];
          for (let i = 0; i < flat_array.length; i++) {
            blockrandlist.push(i);
          }
          fisher_yate(blockrandlist);
          fisher_yate(blockrandlist);
        }

        // Fill nested arrays with trial indices
        var id = 0;
        for (let i = 0; i < flat_array.length; i++) {
          if (blockrandom == 1) {
            block_array[id].push(blockrandlist[i]);
          } else {
          block_array[id].push(i);
          }
          if ((i + 1) % pair_num == 0) {
            id = id + 1;
          }
        }

        if (block_array.length == 2) {
            let coin = Math.floor(Math.random() * 2) + 1; // Flip a coin
            if (coin == 1) {
                block_array = [block_array[1], block_array[0]];
                }
            } else {
                fisher_yate(block_array); // Randomise block order
                fisher_yate(block_array);
                }

        // Creates an array of 0s for a number of necessary variables
        for (let i = 0; i < flat_array.length; i++) {
          step_index_array.push(0);
          freq_index_array.push(0);
          n_reversal_array.push(0);
          c_reversal_array.push(0);
          up_counter_array.push(0);
          down_counter_array.push(0);
          trial_counter_array.push(0);
          c_stop_array.push(0);
          last_direction_array.push(0);
          first_rev_array.push(0);
        }

        // Creates an array of -1s for the last reversal tracker (cannot use 0 for this one)
        for (let i = 0; i < flat_array.length; i++) {
          l_reversal_array.push(-1);
          last_result_array.push(-1);
        }

        // Creates an array of ascending numbers to represent different staircases
        if (order_mode != 6) {
            for (let i = 0; i < flat_array.length; i++) {
                trial_index_array.push(i);
                }
            } else {
                trial_index_array = block_array[0]
                }

        // When any random elements are involved in terms of staircase order, this shuffles the order
        if (order_mode != 3 || order_mode != 5) {
          fisher_yate(trial_index_array);
          fisher_yate(trial_index_array);
        }

        // In blocked orders, this sets the trial_array to the first position right from the start.
        if (order_mode > 2 && order_mode < 6) {
            trial_indexer = 1;
            trial_index = trial_index_array[trial_indexer -1];
            }

        // Set maximum number of trials
        num_trials = (max_trials * flat_array.length);
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have now completed the practice trials, and the experiment will now begin.

        Everything will be the same as the practice trials, except that you will not receive feedback after your response.

        You will receive a chance for a break part way through the study

        Press SPACEBAR to begin the task.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Brief1
  Routine Brief2
  Routine Brief3
  Routine Consent
  Routine questionnairePrompt
  Routine genderQ
  LoopInitiator typedResponseLoop loopType="TrialHandler"
    conditionsFile = csv/typed_questions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('typePrompt', 'What is your age in years at the time of this study?')]),
      OrderedDict([('typePrompt', 'Have you taken private musical lessons? If so, for how many years?')]),
      OrderedDict([('typePrompt', 'Do you consider yourself proficient on a musical instrument, and if so, which one?')]),
      OrderedDict([('typePrompt', 'Do you own a personal music listening device? If so, what kind of device do you own?')])]
    Routine typedResponse
  LoopTerminator typedResponseLoop
  LoopInitiator LikertLoop loopType="TrialHandler"
    conditionsFile = csv/likertLoopPrompts.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Question', 'I spend a lot of my free time doing music-related activities.')]),
      OrderedDict([('Question', 'I sometimes choose music that can trigger shivers down my spine.')]),
      OrderedDict([('Question', 'I enjoy writing about music, for example on blogs and forms.')]),
      OrderedDict([('Question', "If somebody starts singing a song I don't know, I can usually join in.")]),
      OrderedDict([('Question', 'I am able to judge whether someone is a good singer or not.')]),
      OrderedDict([('Question', "I usually know when I'm hearing a song for the first time.")]),
      OrderedDict([('Question', 'I can sing or play music from memory.')]),
      OrderedDict([('Question', "I'm intrigued by musical styles I'm not familiar with and want to find out more.")]),
      OrderedDict([('Question', 'Pieces of music rarely evoke emotions for me.')]),
      OrderedDict([('Question', 'I am able to hit the right notes when I sing along with a recording.')]),
      OrderedDict([('Question', 'I find it difficult to spot mistakes in a performance of a song even if I know the tune.')]),
      OrderedDict([('Question', 'I can compare and discuss differences between two performances or versions of the same piece of music.')]),
      OrderedDict([('Question', 'I have trouble recognizing a familiar song when played in a different way or by a different performer.')]),
      OrderedDict([('Question', 'I have never been complimented for my talents as a musical performer.')]),
      OrderedDict([('Question', 'I often read or search the internet for things related to music.')])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
    Routine goldsmithLikert
  LoopTerminator LikertLoop
  LoopInitiator genreLoop loopType="TrialHandler"
    conditions = [OrderedDict([('question', 'What is the musical genre you mainly listen to?'), ('r1', 'Rock/Pop'), ('r2', 'Jazz'), ('r3', 'Classical Music')])]
    conditionsFile = csv/Genre.csv
    loopType = random
    nReps = 1
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    Routine genreQuestion
  LoopTerminator genreLoop
  LoopInitiator mcLoop loopType="TrialHandler"
    conditionsFile = csv/multipleChoice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('question', 'I engaged in regular, daily practice of a musical instrument (including voice) for ___ years.'), ('r1', 0.0), ('r2', 1.0), ('r3', 2.0), ('r4', 3.0), ('r5', '4 to 5'), ('r6', '6 to 9'), ('r7', '10 or more')]),
      OrderedDict([('question', 'At the peak of my interest, I practiced ___ hours per day on my primary instrument.'), ('r1', 0.0), ('r2', 0.5), ('r3', 1.0), ('r4', 1.5), ('r5', 2.0), ('r6', '3 to 4'), ('r7', '5 or more')]),
      OrderedDict([('question', 'I have attended ___ live music events as an audience member in the past twelve months.'), ('r1', 0.0), ('r2', 1.0), ('r3', 2.0), ('r4', 3.0), ('r5', '4 to 6'), ('r6', '7 to 10'), ('r7', '11 or more')]),
      OrderedDict([('question', 'I have had formal training in music theory for ___ years.'), ('r1', 0.0), ('r2', 0.5), ('r3', 1.0), ('r4', 2.0), ('r5', 3.0), ('r6', '4 to 6'), ('r7', '7 or more')]),
      OrderedDict([('question', 'I have had ___ years of formal training on a musical instrument (including voice) during my lifetime.'), ('r1', 0.0), ('r2', 0.5), ('r3', 1.0), ('r4', 2.0), ('r5', '3 to 5'), ('r6', '6 to 9'), ('r7', '10 or more')]),
      OrderedDict([('question', 'I can play ___ musical instruments.'), ('r1', 0.0), ('r2', 1.0), ('r3', 2.0), ('r4', 3.0), ('r5', 4.0), ('r6', 5.0), ('r7', '6 or more')])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
    Routine multipleChoice
  LoopTerminator mcLoop
  LoopInitiator mcLoop2 loopType="TrialHandler"
    conditionsFile = csv/multipleChoice2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Q', 'Approximately how many hours a week do you spend practicing/performing/jamming (as opposed to listening) to music?'), ('Re1', '0 to 1'), ('Re2', '1 to 5'), ('Re3', '5 to 10'), ('Re4', '10 to 15'), ('Re5', '15 to 20'), ('Re6', 'Over 20')]),
      OrderedDict([('Q', 'Approximately how many hours a week do you spend listening to (as opposed to practicing or performing) music?'), ('Re1', '0 to 1'), ('Re2', '1 to 5'), ('Re3', '5 to 10'), ('Re4', '10 to 15'), ('Re5', '15 to 20'), ('Re6', 'Over 20')])]
    Routine multipleChoice2
  LoopTerminator mcLoop2
  Routine Volume_Check
  Routine Volume_Check2
  LoopInitiator loader loopType="TrialHandler"
    conditionsFile = csv/sound_id.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('sound_id', 'wav/flat_0.wav')]),
      OrderedDict([('sound_id', 'wav/flat_1.wav')]),
      OrderedDict([('sound_id', 'wav/flat_2.wav')]),
      OrderedDict([('sound_id', 'wav/flat_3.wav')]),
      OrderedDict([('sound_id', 'wav/flat_4.wav')]),
      OrderedDict([('sound_id', 'wav/flat_5.wav')]),
      OrderedDict([('sound_id', 'wav/flat_6.wav')]),
      OrderedDict([('sound_id', 'wav/flat_7.wav')]),
      OrderedDict([('sound_id', 'wav/flat_8.wav')]),
      OrderedDict([('sound_id', 'wav/flat_9.wav')]),
      OrderedDict([('sound_id', 'wav/flat_10.wav')]),
      OrderedDict([('sound_id', 'wav/flat_11.wav')]),
      OrderedDict([('sound_id', 'wav/flat_12.wav')]),
      OrderedDict([('sound_id', 'wav/flat_13.wav')]),
      OrderedDict([('sound_id', 'wav/flat_14.wav')]),
      OrderedDict([('sound_id', 'wav/flat_15.wav')]),
      OrderedDict([('sound_id', 'wav/flat_16.wav')]),
      OrderedDict([('sound_id', 'wav/flat_17.wav')]),
      OrderedDict([('sound_id', 'wav/flat_18.wav')]),
      OrderedDict([('sound_id', 'wav/flat_19.wav')]),
      OrderedDict([('sound_id', 'wav/flat_20.wav')]),
      OrderedDict([('sound_id', 'wav/flat_21.wav')]),
      OrderedDict([('sound_id', 'wav/flat_22.wav')]),
      OrderedDict([('sound_id', 'wav/flat_23.wav')]),
      OrderedDict([('sound_id', 'wav/flat_24.wav')]),
      OrderedDict([('sound_id', 'wav/flat_25.wav')]),
      OrderedDict([('sound_id', 'wav/flat_26.wav')]),
      OrderedDict([('sound_id', 'wav/flat_27.wav')]),
      OrderedDict([('sound_id', 'wav/flat_28.wav')]),
      OrderedDict([('sound_id', 'wav/flat_29.wav')]),
      OrderedDict([('sound_id', 'wav/flat_30.wav')]),
      OrderedDict([('sound_id', 'wav/flat_31.wav')])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
    Routine loading
  LoopTerminator loader
  Routine Intro
  Routine practice_intro
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = csv/practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ref', 'wav/flat_120.wav'), ('tar', 'wav/flat_80.wav'), ('cor', 1)]),
      OrderedDict([('ref', 'wav/flat_120.wav'), ('tar', 'wav/flat_160.wav'), ('cor', 2)]),
      OrderedDict([('ref', 'wav/flat_180.wav'), ('tar', 'wav/flat_140.wav'), ('cor', 1)]),
      OrderedDict([('ref', 'wav/flat_180.wav'), ('tar', 'wav/flat_220.wav'), ('cor', 2)]),
      OrderedDict([('ref', 'wav/perc_120.wav'), ('tar', 'wav/perc_80.wav'), ('cor', 1)]),
      OrderedDict([('ref', 'wav/perc_120.wav'), ('tar', 'wav/perc_160.wav'), ('cor', 2)]),
      OrderedDict([('ref', 'wav/perc_180.wav'), ('tar', 'wav/perc_140.wav'), ('cor', 1)]),
      OrderedDict([('ref', 'wav/perc_180.wav'), ('tar', 'wav/perc_220.wav'), ('cor', 2)])]
    Routine practice_trial
    Routine routine_1
  LoopTerminator practice_loop
  Routine real_intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = fullRandom
    nReps = num_trials
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    conditions:
      [OrderedDict([('correctans', 1), ('amp1', 1), ('amp2', 0), ('amp3', 0)]),
      OrderedDict([('correctans', 2), ('amp1', 0), ('amp2', 1), ('amp3', 0)]),
      OrderedDict([('correctans', 3), ('amp1', 0), ('amp2', 0), ('amp3', 1)])]
    Routine testing
    Routine Trials
    Routine trials_sim
    Routine general_break
    Routine blocks_break
  LoopTerminator trials
  Routine Debrief
  Routine end_question
